PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = recording_guide
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Routines
  Routine trial
    CodeComponent countdown_code
      Code Type = Py
      Begin Routine:
        thisNum = 0
      Each Frame:
        if t >= 0:
            thisNum = int(round(t, 3))
        else:
            thisNum = 3
    TextComponent countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $3 - thisNum
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    SoundComponent clap
      durationEstim = .2
      sound = clap.wav
      startVal [time (s)] = 3
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    TextComponent speak
      letterHeight = 0.1
      startVal [time (s)] = 4
      text = speak
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    KeyboardComponent key_resp
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 4
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    TextComponent sentTxt
      letterHeight = 0.05
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $sentence
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    TextComponent key_reminder
      letterHeight = 0.02
      pos = (0, -.4)
      startVal [time (s)] = 4
      text = press the down arrow key to submit
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  Routine instructions
    TextComponent instruct
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        This is a basic experiment to assist with the recording of audio and video files to generate speech stimuli.

        At the start of each trial you will see the sentence you are about to read.

        You will then see a countdown, followed by a clap cound, followed by a cue to speak. After you have spoken please press the space bar to move on.

        Note that we will not use psychopys mic component for audio recording, recording will take place in a seperate window using audacity.

        press space to start
    KeyboardComponent start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine interimMsg
    TextComponent interim
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Stop the video and audio recording, save the files, press space when you are ready to continue

        Press the right arrow if you are happy with the recording, press left to retake
    KeyboardComponent retake_key
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent retake_code
      Code Type = Py
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      End Routine:
        # only move on if the right key was pressed, otherwise repeat
        if 'right' in retake_key.keys:
            retakeLoop.finished = True
  Routine startInstructions
    TextComponent audStart
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Start your audio
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    TextComponent vidStart
      letterHeight = 0.1
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      text = Start your video
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 40:81
    conditionsFile = Sentence_keyword_check.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'sentence_number': 1, 'sentence': 'The hot sun warmed the ground', 'keyword1': 'hot', 'keyword2': 'sun', 'keyword3': 'warmed', 'keyword4': 'ground', 'Recorded': None},
      {'sentence_number': 2, 'sentence': 'The gray mouse ate the cheese', 'keyword1': 'gray', 'keyword2': 'mouse', 'keyword3': 'ate', 'keyword4': 'cheese', 'Recorded': None},
      {'sentence_number': 3, 'sentence': 'The strong father carried my brother', 'keyword1': 'strong', 'keyword2': 'father', 'keyword3': 'carried', 'keyword4': 'brother', 'Recorded': None},
      {'sentence_number': 4, 'sentence': 'The large monkey chased the child', 'keyword1': 'large', 'keyword2': 'monkey', 'keyword3': 'chased', 'keyword4': 'child', 'Recorded': None},
      {'sentence_number': 5, 'sentence': 'The mean bear ate the fruit', 'keyword1': 'mean', 'keyword2': 'bear', 'keyword3': 'ate', 'keyword4': 'fruit', 'Recorded': None},
      {'sentence_number': 6, 'sentence': 'The loud noise upset the baby', 'keyword1': 'loud', 'keyword2': 'noise', 'keyword3': 'upset', 'keyword4': 'baby', 'Recorded': None},
      {'sentence_number': 7, 'sentence': 'The friendly neighbor helped the grandmother', 'keyword1': 'friendly', 'keyword2': 'neighbor', 'keyword3': 'helped', 'keyword4': 'grandmother', 'Recorded': None},
      {'sentence_number': 8, 'sentence': 'The black bear scared the visitors', 'keyword1': 'black', 'keyword2': 'bear', 'keyword3': 'scared', 'keyword4': 'visitors', 'Recorded': None}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
    LoopInitiator retakeLoop loopType="TrialHandler"
      loopType = random
      nReps = 100
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      Routine startInstructions
      Routine trial
      Routine interimMsg
    LoopTerminator retakeLoop
  LoopTerminator trials
